<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Fim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index>0</spk:Index>
          <spk:SerialNumber>23557708</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>640</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:Size>
          <cv:Interpolation>NearestNeighbor</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\Asus\Documents\H-IBL.TaskPretest\screen_calibration\screen_data\teste.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Fim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawFrame</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Fim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WhiteScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlueScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RedScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GreenScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>1</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Grey20Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.2</ColorR>
              <ColorG>0.2</ColorG>
              <ColorB>0.2</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Grey40Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.4</ColorR>
              <ColorG>0.4</ColorG>
              <ColorB>0.4</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Grey60Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.6</ColorR>
              <ColorG>0.6</ColorG>
              <ColorB>0.6</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Grey80Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.8</ColorR>
              <ColorG>0.8</ColorG>
              <ColorB>0.8</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WhiteScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Blue20Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0.2</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Blue40Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0.4</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Blue60Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0.6</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Blue80Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0.8</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlueScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Red20Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.2</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Red40Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.4</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Red60Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.6</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Red80Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0.8</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RedScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Green20Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0.2</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Green40Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0.4</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Green60Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0.6</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Green80Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0.8</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GreenScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>1</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlackScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3.56</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:LastOrDefault" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Fim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\Asus\Documents\H-IBL.TaskPretest\screen_calibration\screen_data\timestamps_sc.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="51" Label="Source1" />
      <Edge From="20" To="51" Label="Source2" />
      <Edge From="21" To="51" Label="Source3" />
      <Edge From="22" To="51" Label="Source4" />
      <Edge From="23" To="51" Label="Source5" />
      <Edge From="24" To="51" Label="Source6" />
      <Edge From="25" To="51" Label="Source7" />
      <Edge From="26" To="51" Label="Source8" />
      <Edge From="27" To="51" Label="Source9" />
      <Edge From="28" To="51" Label="Source10" />
      <Edge From="29" To="51" Label="Source11" />
      <Edge From="30" To="51" Label="Source12" />
      <Edge From="31" To="51" Label="Source13" />
      <Edge From="32" To="51" Label="Source14" />
      <Edge From="33" To="51" Label="Source15" />
      <Edge From="34" To="51" Label="Source16" />
      <Edge From="35" To="51" Label="Source17" />
      <Edge From="36" To="51" Label="Source18" />
      <Edge From="37" To="51" Label="Source19" />
      <Edge From="38" To="51" Label="Source20" />
      <Edge From="39" To="51" Label="Source21" />
      <Edge From="40" To="51" Label="Source22" />
      <Edge From="41" To="51" Label="Source23" />
      <Edge From="42" To="51" Label="Source24" />
      <Edge From="43" To="51" Label="Source25" />
      <Edge From="44" To="51" Label="Source26" />
      <Edge From="45" To="51" Label="Source27" />
      <Edge From="46" To="51" Label="Source28" />
      <Edge From="47" To="51" Label="Source29" />
      <Edge From="48" To="51" Label="Source30" />
      <Edge From="49" To="51" Label="Source31" />
      <Edge From="50" To="51" Label="Source32" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>